/// This parameter file has kind of realistic values.
// In most other parameter files for testing, the number of samples and iterations is rather low, to allow fast testing.


// ********** Image Types

(FixedInternalImagePixelType "float")
(FixedImageDimension 2)
(MovingInternalImagePixelType "float")
(MovingImageDimension 2)


// ********** Components

(Registration "MultiResolutionRegistration")
(FixedImagePyramid "FixedGenericImagePyramid")
(MovingImagePyramid "MovingGenericImagePyramid")
(ImagePyramidRescaleSchedule 1 1 1 1 1 1)
(ImagePyramidSmoothingSchedule 1 1 1 1 1 1)
(Interpolator "BSplineInterpolator")

(Metric "Impact")
(Optimizer "AdaptiveStochasticGradientDescent")
(ResampleInterpolator "FinalBSplineInterpolator")
(Resampler "DefaultResampler")
(Transform "BSplineTransform")


// ********** Pyramid

// Total number of resolutions
(NumberOfResolutions 2)
(ImagePyramidSchedule 3 3 1 1)


// ********** Transform

(FinalGridSpacingInPhysicalUnits 16)
(GridSpacingSchedule 3.0 1.0)
(HowToCombineTransforms "Compose")


// ********** Optimizer

// Maximum number of iterations in each resolution level:
(MaximumNumberOfIterations 200)

(AutomaticParameterEstimation "true")
(UseAdaptiveStepSizes "true")


// ********** Metric
(ModelsPath "./R1D2_2D.pt")
(Dimension "2")
(NumberOfChannels "1")
(PatchSize "7*7")
(VoxelSize "3*3*3" "1.5*1.5*1.5")
(LayersMask "1")
 
(SubsetFeatures "4")
(LayersWeight "1")
(Mode "Jacobian")
(Device -1)
(PCA "0")
(Distance "L2")
(FeaturesMapUpdateInterval -1)
(WriteFeatureMaps "false")



// ********** Several

(WriteTransformParametersEachIteration "false")
(WriteTransformParametersEachResolution "true")
(WriteResultImageAfterEachResolution "false")
(WritePyramidImagesAfterEachResolution "false")
(WriteResultImage "true")
(ShowExactMetricValue "false")
(ErodeMask "false")
(UseDirectionCosines "true")


// ********** ImageSampler

(RandomSeed 42)
//Number of spatial samples used to compute the mutual information in each resolution level:
(ImageSampler "RandomCoordinate")
(NumberOfSpatialSamples 500)
(NewSamplesEveryIteration "true")
(UseRandomSampleRegion "false")
//(SampleRegionSize 50.0 50.0 50.0)
(MaximumNumberOfSamplingAttempts 8)


// ********** Interpolator and Resampler

//Order of B-Spline interpolation used in each resolution level:
(BSplineInterpolationOrder 1)

//Order of B-Spline interpolation used for applying the final deformation:
(FinalBSplineInterpolationOrder 3)

//Default pixel value for pixels that come from outside the picture:
(DefaultPixelValue 0)

